<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam1_open_field_raw_video_session.mp4</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>234</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Orientation</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>cam1_open_field_session.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>cam2_open_field_raw_video_session.mp4</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>234</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Orientation</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Difference">
          <dsp:Order>1</dsp:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>cam2_open_field_session.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="10" To="15" Label="Source2" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="11" To="15" Label="Source3" />
      <Edge From="12" To="15" Label="Source4" />
      <Edge From="13" To="15" Label="Source5" />
      <Edge From="14" To="15" Label="Source6" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="28" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="26" To="32" Label="Source1" />
      <Edge From="27" To="30" Label="Source1" />
      <Edge From="27" To="32" Label="Source2" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="28" To="32" Label="Source3" />
      <Edge From="29" To="32" Label="Source4" />
      <Edge From="30" To="32" Label="Source5" />
      <Edge From="31" To="32" Label="Source6" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>